PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'Task': "['Day/Night', 'Elephant', 'Crayon']", 'ID': '', 'Age (months)': '', 'Demo': "['No', 'Yes']", 'Debug': "['No', 'Yes']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['sequences\\crayon-2yo.csv', 'sequences\\day-night-2yo.csv', 'sequences\\day-night-3yo.csv', 'sequences\\day-night-4yo.csv', 'sequences\\elephant-2yo.csv', 'imgs\\crayon\\crayon-box-long.png', 'imgs\\crayon\\crayon-box-short.png', 'imgs\\crayon\\crayon-card-long-transp.png', 'imgs\\crayon\\crayon-card-short-transp.png', 'imgs\\elephant\\elephant-box-big.png', 'imgs\\elephant\\elephant-box-small.png', 'imgs\\elephant\\elephant-card-big-transp.png', 'imgs\\elephant\\elephant-card-small-transp.png', 'imgs\\elephant\\penguin-box.png', 'imgs\\elephant\\penguin-card-transp.png', 'imgs\\day-night\\day.png', 'imgs\\day-night\\day-box.png', 'imgs\\day-night\\day-redline.png', 'imgs\\day-night\\deck.png', 'imgs\\day-night\\night.png', 'imgs\\day-night\\night-box.png', 'imgs\\day-night\\night-redline.png', 'imgs\\slides\\new-slide-1.png', 'imgs\\slides\\new-slide-2.png', 'imgs\\slides\\new-slide-3.png', 'imgs\\slides\\new-slide-4.png', 'imgs\\slides\\slide-03.png', 'imgs\\slides\\slide-04.png', 'imgs\\slides\\slide-06.png', 'imgs\\slides\\slide-07.png', 'imgs\\slides\\slide-09.png', 'imgs\\slides\\slide-10.png', 'imgs\\continue.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = #D8E6E4
  expName = stroop-like
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Routines
  Routine trial
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        if practice_passed \
        or terminate_experiment \
        or (not SHOW_DEMO and is_demo):
            continueRoutine = False
        elif trialNum == 1:
            # First trial of the block
            if TASK_NAME == "Day/Night":
                box1 = DAY_BOX
                box2 = NIGHT_BOX
                unhide(CARD_STACK, DECK_SIZE)
            elif TASK_NAME == "Elephant":
                if int(blockNum) <= 3:
                    box1 = BIG_ELEPHANT_BOX
                    box2 = PENGUIN_BOX
                else:
                    box1 = BIG_ELEPHANT_BOX
                    box2 = SMALL_ELEPHANT_BOX
            elif TASK_NAME == "Crayon":
                box1 = LONG_CRAYON_BOX
                box2 = SHORT_CRAYON_BOX
            unhide(box1, BOX_SIZE)
            unhide(box2, BOX_SIZE)

        hide(GLOBAL_CONT)

        dormant_card = make_img(
            stimulus,
        #    f"{stimulus_stem}/{stimulus}.png",
            stimulus_file,
            NEW_CARD_POS
        )
        active_card = None
        moving_card = None
        drag_in_process = False

        if trialNum == maxScore:
            # Last trial of the block
            hide(CARD_STACK)

        feedback_delay_start = None
        picture_delay_start = 0.0

        choice = None
        correct = None
        trial_time = None

        x = 0
        y = 0
        coords_x = []
        coords_y = []
        coords_t = []

        # Would have clicked 'continue' to reach here
        DRAG_MOUSE_state = 1
        prev_DRAG_MOUSE_state = 0
      Each Frame:
        if SHOW_DEBUG:
            trialDebug.text = f"""tryNum = {tryNum}
        trialNum = {trialNum} (out of {maxScore})
        score = {score} (out of {maxScore})
        globalClock = {round(globalClock.getTime(), 3)}
        t = {round(t, 3)}
        """
            if moving_card is not None:
                trialDebug.text += f"""\nmoving_card.name = {moving_card.name}
        pos = ({round(moving_card.pos[0], 3)}, {round(moving_card.pos[1], 3)})
        """

        # There will always be a delay...
        if feedback_delay_start is not None:
            # Test no removing delay for non-practice
            if is_practice:
                feedback_delay = 0.5  # seconds
                if is_practice and correct == 0:
                    # Longer delay for incorrect answer
                    feedback_delay = 1.0  # seconds
                if t - feedback_delay_start > feedback_delay:
                    continueRoutine = False
            else:
                # No delay for non-practice
                continueRoutine = False
        elif active_card is None and t > 0.05:
            active_card = dormant_card
            unhide(active_card, CARD_SIZE)
        elif not drag_in_process and t > 0.1:
            DRAG_MOUSE_state = DRAG_MOUSE.getPressed()[0]
            if prev_DRAG_MOUSE_state != DRAG_MOUSE_state:
                prev_DRAG_MOUSE_state = DRAG_MOUSE_state
                if DRAG_MOUSE_state == 1:
                    if DRAG_MOUSE.isPressedIn(active_card):
                        moving_card = active_card
                        drag_in_process = True

        if DRAG_MOUSE.getPressed()[0] == 1:
            if drag_in_process:
                x, y = moving_card.pos = DRAG_MOUSE.getPos()
                if len(coords_x) > 0:
                    if dist_sq(coords_x[-1], coords_y[-1], x, y) > MIN_DIST_SQ:
                        coords_x.append(round_dp(x))
                        coords_y.append(round_dp(y))
                        coords_t.append(round_dp(t))
                else:
                    coords_x.append(round_dp(x))
                    coords_y.append(round_dp(y))
                    coords_t.append(round_dp(t))
        else:
            drag_in_process = False
            if moving_card is not None:
                # Made a choice
                if snapped(moving_card, box1):
                    choice = box1.name
                    hide(moving_card)
                elif snapped(moving_card, box2):
                    choice = box2.name
                    hide(moving_card)
                # Evaluate choice
                if choice is not None:
                    trial_time = t
                    cumulative_time += t
                    feedback_delay_start = t
                    if choice == corrAns:
                        correct = 1
                        trialFeedback.text = "Correct!"
                        score += 1
                    else:
                        correct = 0
                        trialFeedback.text = "Let's think again"
                moving_card = None
      End Routine:
        if trialNum == maxScore:
            "Last trial of the block"
            if box1 is not None:
                hide(box1)
            if box2 is not None:
                hide(box2)

            hide(CARD_STACK)
            if age_months > 24 and tryNum == 3:
                if not practice_passed and EXIT_3_PRAC and score < maxScore:
                    terminate_experiment = True
                practice_passed = False  # Reset
            if age_months <= 24 and tryNum == 1:
                if not practice_passed and EXIT_3_PRAC and score < maxScore:
                    terminate_experiment = True
                practice_passed = False  # Reset
            elif is_practice and score == maxScore:
                practice_passed = True
            score = 0  # Reset

        trialFeedback.text = ""

        thisExp.addData("choice", choice)
        thisExp.addData("correct", correct)
        thisExp.addData("trial_time", trial_time)
        thisExp.addData("cumulative_time", cumulative_time)

        # Position tracking (for Nixi)
        thisExp.addData("coords_x", coords_x)
        thisExp.addData("coords_y", coords_y)
        thisExp.addData("coords_t", coords_t)

        # Record timestamp and total time
        thisExp.addData("end_timestamp", util.MonotonicClock.getDateStr())
        thisExp.addData("total_seconds", globalClock.getTime())
    TextComponent trialHeader
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockName
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    TextComponent trialFeedback
      letterHeight = 0.1
      pos = (0, -0.05)
      saveStartStop = False
      startVal [condition] = is_practice
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    TextComponent trialDebug
      letterHeight = 0.02
      pos = (0.5, 0.4)
      saveStartStop = False
      startVal [condition] = SHOW_DEBUG
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  Routine begin1
    CodeComponent begin1Code
      Code Type = Auto->JS
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      Before Experiment:
        def within_box(obj, box):
            """
            Determine if object is within box
            - Squared difference in x (and y) coordinates
            should be less than the square of half the
            box width (and height)
            - That would mean the center of the object is
            within the box boundaries
            """
            obj_x, obj_y = obj.pos
            box_x, box_y = box.pos
            box_w, box_h = box.size
            dx, dy = obj_x - box_x, obj_y - box_y
            hw, hh = box_w / 2, box_h / 2
            return dx * dx < hw * hw and dy * dy < hh * hh

        def snapped(obj1, obj2, func=within_box):
            """
            Determine if obj1 snapped to center of obj2
            - Check if obj1 is 'near' obj2, based on func
            - If yes, set the obj1's position to be
            equal to obj2's position and return True
            - Otherwise, do nothing and return False
            """
            if func(obj1, obj2):
                obj1.pos = obj2.pos
                return True
            return False

        def hide(obj):
            obj.size = (0, 0)
            obj.autoDraw = False

        def unhide(obj, size):
            obj.size = size
            obj.autoDraw = True

        def make_img(name, file_path, pos=(0, 0), size=(0, 0)):
            img, = visual.ImageStim(
                win=win,
                name=name,
                image=file_path,
                pos=pos,
                size=size
            ),
            img.autoDraw = True
            return img

        def make_slide(filename, pos=(0, 0), size=SLIDE_SIZE):
            return make_img(filename, f"imgs/slides/{filename}.png", pos, size)

        def make_sound(value, name="sound"):
            snd, = sound.Sound(
                win=win,
                value=value,
                secs=-1,
                stereo=True,
                hamming=True,
                name=name
            ),
            snd.setVolume(1.0)
            return snd

        def dist_sq(x1, y1, x2, y2):
            dx, dy = x2 - x1, y2 - y1
            return (dx * dx) + (dy * dy)

        def round_dp(x, dp=5):
            num, = (10 ** dp),
            return round(x * num) / num
      Begin Experiment:
        SHOW_DEMO = (expInfo["Demo"] == "Yes")
        SHOW_DEBUG = (expInfo["Debug"] == "Yes")
        USE_AUDIO = False

        TASK_NAME = expInfo["Task"]
        age_months_str = expInfo["Age (months)"]
        #age_months = None
        "Result will depend on the behavior of Number.parseFloat()"
        "We know that it will at least interpret leading numbers, e.g. '123abc' as 123"
        age_months = float(age_months_str)
        if str(age_months) == "NaN":
            raise f"Invalid value for Age (months): \"{age_months_str}\". Please reload the page and provide a valid value."

        "Make this a function"
        if TASK_NAME == "Elephant":
            if age_months > 24:
                raise f"No suitable conditions file for Elephant task for given age ({age_months} months). Please reload the page and provide an age that is 24 months or less."
            conditions_file = "sequences/elephant-2yo.csv"
        elif TASK_NAME == "Crayon":
            if age_months > 24:
                raise f"No suitable conditions file for Crayon task for given age ({age_months} months). Please reload the page and provide an age that is 24 months or less."
            conditions_file = "sequences/crayon-2yo.csv"
        elif TASK_NAME == "Day/Night":
            if age_months <= 24:
                conditions_file = "sequences/day-night-2yo.csv"
            elif age_months <= 36:
                conditions_file = "sequences/day-night-3yo.csv"
            else:
                conditions_file = "sequences/day-night-4yo.csv"

        print(f"age_months = {age_months}")
        print(f"conditions_file = {conditions_file}")

        "Exit if fail 3 repeat practices (disabled)"
        EXIT_3_PRAC = False

        # So the cards do not immediately move (100 ms)
        PICTURE_DELAY = 0.1

        # Slides: 1001x563
        SLIDE_SIZE = (1.0, 0.562438)

        # Continue: 586x257
        CONTINUE_SIZE = (0.228, 0.1)
        CONTINUE_POS = (0, -0.4)

        # Deck: 202x280
        DECK_SIZE = (0.2, 0.28)

        IMG_LEN = None

        if TASK_NAME == "Day/Night":
            "Cards: 180x260"
            CARD_SIZE = (0.18, 0.26)
            "Boxes: 450x370 (0.35 / 450 * 370 = 0.287778)"
            BOX_SIZE = (0.35, 0.287778)
        else:
            "Elephant and Crayon are the only others"
        #    "Cards: 600x361"
        #    CARD_SIZE = (0.3, 0.1805)
        #    "Boxes: 600x364"
        #    BOX_SIZE = (0.35, 0.212333)
            "New images: all 500x301 (make all same)"
            IMG_LEN = 0.60
            BOX_SIZE = (IMG_LEN, IMG_LEN / 500 * 301)
            CARD_SIZE = BOX_SIZE

        BOX_POS_1 = (-0.4, 0.15)
        BOX_POS_2 = (0.4, 0.15)
        NEW_CARD_POS = (0, -0.3)
        CARD_STACK_POS = (-0.011, -0.291)

        GLOBAL_CONT = make_img(
            "GLOBAL_CONT",
            "imgs/continue.png",
            CONTINUE_POS,
            CONTINUE_SIZE
        )

        terminate_experiment = False
        practice_passed = False

        inst_slide = None
        inst_sound = None

        # Minimum distance apart for subsequent points
        MIN_DIST_SQ = 0.005 * 0.005

        DRAG_MOUSE = core.Mouse(win=win)

        DAY_BOX = make_img("day_box",
                           "imgs/day-night/day-box.png",
                           BOX_POS_1)
        NIGHT_BOX = make_img("night_box",
                             "imgs/day-night/night-box.png",
                             BOX_POS_2)
        CARD_STACK = make_img("card_stack",
                              "imgs/day-night/deck.png",
                              CARD_STACK_POS)
        BIG_ELEPHANT_BOX = make_img("big_elephant_box",
                                    "imgs/elephant/elephant-box-big.png",
                                    BOX_POS_1)
        PENGUIN_BOX = make_img("penguin_box",
                               "imgs/elephant/penguin-box.png",
                               BOX_POS_2)
        SMALL_ELEPHANT_BOX = make_img("small_elephant_box",
                                      "imgs/elephant/elephant-box-small.png",
                                      BOX_POS_2)
        LONG_CRAYON_BOX = make_img("long_crayon_box",
                                   "imgs/crayon/crayon-box-long.png",
                                   BOX_POS_1)
        SHORT_CRAYON_BOX = make_img("short_crayon_box",
                                    "imgs/crayon/crayon-box-short.png",
                                    BOX_POS_2)

        if TASK_NAME == "Day/Night":
            stimulus_stem = "imgs/day-night"
        elif TASK_NAME == "Elephant":
            stimulus_stem = "imgs/elephant"
        elif TASK_NAME == "Crayon":
            stimulus_stem = "imgs/crayon"

        cumulative_time = 0.0
        score = 0
        box1 = None
        box2 = None
      Begin Routine:
        is_demo = (tryNum == 0)
        is_practice = not is_demo and (pracNum != "NA")

        if slideFile1 == "NA" \
        or practice_passed or \
        terminate_experiment:
            continueRoutine = False
        else:
            inst_slide = make_slide(slideFile1)
            unhide(GLOBAL_CONT, CONTINUE_SIZE)
            if USE_AUDIO:
                inst_sound = make_sound("aud/mp3/DN_intro.mp3")
                inst_sound.play()
      End Routine:
        if slideFile1 != "NA":
            hide(inst_slide)
            hide(GLOBAL_CONT)
            if USE_AUDIO:
                inst_sound.stop()
    MouseComponent begin1Mouse
      clickable = GLOBAL_CONT
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine begin2
    CodeComponent begin2Code
      Code Type = Auto->JS
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      Begin Routine:
        if slideFile2 == "NA" \
        or practice_passed or \
        terminate_experiment:
            continueRoutine = False
        else:
            inst_slide = make_slide(slideFile2)
            unhide(GLOBAL_CONT, CONTINUE_SIZE)
            if USE_AUDIO:
                inst_sound = make_sound(f"aud/mp3/DN_rule{pracNum}.mp3")
                inst_sound.play()
      End Routine:
        if slideFile2 != "NA":
            hide(inst_slide)
            hide(GLOBAL_CONT)
            if USE_AUDIO:
                inst_sound.stop()
    MouseComponent begin2Mouse
      clickable = GLOBAL_CONT
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.2
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  Routine begin3
    CodeComponent begin3Code
      Code Type = Auto->JS
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      Begin Routine:
        if slideFile3 == "NA" \
        or practice_passed \
        or terminate_experiment \
        or (not SHOW_DEMO and is_demo):
            continueRoutine = False
        elif slideFile3 == "DEMO":
            demoText.text = ("Now, I am going to show you "
                             "how the game is played and "
                             "then it will be your turn")
            unhide(GLOBAL_CONT, CONTINUE_SIZE)
        else:
            inst_slide = make_slide(slideFile3)
            unhide(GLOBAL_CONT, CONTINUE_SIZE)
            if USE_AUDIO and not is_practice:
                inst_sound = make_sound("aud/mp3/DN_aftprac.mp3")
                inst_sound.play()
      End Routine:
        if slideFile3 == "DEMO":
            demoText.text = ""
            hide(GLOBAL_CONT)
        elif slideFile3 != "NA":
            hide(inst_slide)
            hide(GLOBAL_CONT)
            if USE_AUDIO and not is_practice:
                inst_sound.stop()
    MouseComponent begin3Mouse
      clickable = GLOBAL_CONT
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.2
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    TextComponent demoText
      letterHeight = 0.05
      saveStartStop = False
      startVal [condition] = slideFile3 == "DEMO"
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Flow
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:
    conditionsFile = $conditions_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine begin1
    Routine begin2
    Routine begin3
    Routine trial
  LoopTerminator trials
